# Config file for a simple simulation of the core functions: Confocal, counter,
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    # Devices are defined in another config file:
    #hardware: readConfigFile('devices.cfg')
    module_server:
         address: 10.70.19.73
         port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fit.fitlogic'

    mydummygatedcounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        gate_in_channel: '/Dev1/PFI4'
        count_distribution: 'uniform'
        remoteaccess:

    mykrowave:
        module.Class: 'microwave.mw_source_hp.MicrowaveHP'
        gpib_address: 'GPIB0::20::INSTR'
        gpib_timeout: 20
        mock: False

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        source_channels: 4
        clock_frequency: 100
        count_distribution: 'dark_bright_poisson'
        samples_number: 10                 # for gated counting

    mydummyodmrcounter:
        module.Class: 'odmr_counter_dummy.ODMRCounterDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    motordummy:
        module.Class: 'motor.motor_dummy.MotorDummy'

    laser:
        module.Class: 'laser.laser_cobolt.LaserCobolt'
        remoteaccess: True


    galvomotor:
        module.Class: 'motor.mirror.MirrorGalvo'


    magnetdummy:
        module.Class: 'magnet.magnet_dummy.MagnetDummy'


    xzmotor:
        module.Class: 'motor.motor_nova.NOVATwoAxisStage'
        motor_type_label:
          -
            - 'HWTYPE NDMS1'
            - 'x-axis'
          -
            - 'HWTYPE NDMS1'
            - 'z-axis'

    ymotor:
        module.Class: 'motor.motor_stage_micos_one.MotorStageMicosOne'
        com_port_micos: ['COM4',  'y-axis']
        micos_term_chars: '\r'
        micos_baud_rate: 57600


    mynicard:
        module.Class: 'ni_card_no_A0.SlowNICard'
        clock_channel: '/Dev1/Ctr0'
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI0'
        gate_in_channel: '/Dev1/PFI9'
        counting_edge_rising: True
        odmr_trigger_channel: ''
        clock_frequency: 100               # in Hz
#        x_range: 0, 200                    # in micrometer
#        y_range: 0, 200                    # in micrometer
#        z_range: -100, 100                 # in micrometer
#        a_range: 0, 200                    # 4th unused analog output of NI
#        voltage_range: -10, 10             # in volts
        samples_number: 10                 # for gated counting



logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mynicard'
            savelogic: 'savelogic'

    sequencegeneratorlogic:
        module.Class: 'sequence_generator_logic.SequenceGeneratorLogic'

    gatedcounterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummygatedcounter'
            savelogic: 'savelogic'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'confocal_scanner_motor_interfuse'
            savelogic: 'savelogic'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'confocal_scanner_motor_interfuse'
            fitlogic: 'fitlogic'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimizer1: 'optimizerlogic'
            savelogic: 'savelogic'

    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'counterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'odmrcounterinterfuse'
            fitlogic: 'fitlogic'
            microwave1: 'odmrcounterinterfuse'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'
        scanmode:  'SWEEP'


    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True


    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
        #     scannerLocationRefocus:
        #        module: 'refocus'
        #        preposttasks: ['fliplasermirror']
        #        pausetasks: ['scan', 'odmr']
        #        needsmodules:
        #            optimizer: 'optimizer'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]

    laserlogic:
      module.Class: 'laser_logic.LaserLogic'
      connect:
        laser: laser
      remoteaccess: True

    odmrcounterinterfuse:
        module.Class: 'interfuse.odmr_counter_microwave_interfuse.ODMRCounterMicrowaveInterfuse'
        connect:
            slowcounter : 'mydummycounter'
            microwave: 'mykrowave'

    magnet_motor_interfuse2:
        module.Class: 'interfuse.magnet_motor_interfuse.MagnetMotorInterfuse'
        connect:
            motorstage: 'galvomotor'

    magnet_motor_interfuse:
        module.Class: 'interfuse.magnet_motor_xz_y_interfuse.MagnetMotorXZYInterfuse'
        connect:
            motorstage_xz: 'xzmotor'
            motorstage_y: 'ymotor'


    confocal_scanner_motor_interfuse:
        module.Class: 'interfuse.confocal_scanner_motor_interfuse.ConfocalScannerMotorInterfuse'
        connect:
            magnetinterface: 'magnet_motor_interfuse'
            confocalscanner1: 'mynicard'
            fitlogic: 'fitlogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnet_motor_interfuse2'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            scannerlogic: 'scannerlogic'
            traceanalysis: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'
         #fluorescence_integration_time: 5e-3


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanagerlogic'
            confocallogic1: 'scannerlogic'

    magnet:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic'
            savelogic: 'savelogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'


    lasergui:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'
        remoteaccess: True


